;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;
;;;;;;;;;;      File        :   ion_guide.gem                                             ;;;;;;;;;;
;;;;;;;;;;      Author      :   X. Chen                                                   ;;;;;;;;;;
;;;;;;;;;;      Description :   geometric definition of an ion guide                      ;;;;;;;;;;
;;;;;;;;;;      Note        :   it is made of stacked ring electrodes and housed in       ;;;;;;;;;;
;;;;;;;;;;                      a CF100 vacuum pipe                                       ;;;;;;;;;;
;;;;;;;;;;      License     :   GNU GPLv3                                                 ;;;;;;;;;;
;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;


;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;
;;;;;;;;;;                        Import and calculate parameters                         ;;;;;;;;;;
;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;

$(
local IG                        =   _G.shared_table

local ring_focus_pa_num         =   IG.ring_focus_pa_num
local ring_focus_inner_radii    =   IG.ring_focus_inner_radii
local ring_focus_pitches        =   IG.ring_focus_pitches
local ring_focus_thicknesses    =   IG.ring_focus_thicknesses
local ring_focus_number         =   IG.ring_focus_number

local ring_big_pa_num           =   IG.ring_big_pa_num
local ring_big_inner_radius     =   IG.ring_big_inner_radius
local ring_big_pitch            =   IG.ring_big_pitch
local ring_big_thickness        =   IG.ring_big_thickness
local ring_big_number           =   IG.ring_big_number

local ring_taper_pa_num         =   IG.ring_taper_pa_num
local ring_taper_inner_radii    =   IG.ring_taper_inner_radii
local ring_taper_pitches        =   IG.ring_taper_pitches
local ring_taper_thicknesses    =   IG.ring_taper_thicknesses
local ring_taper_number         =   IG.ring_taper_number

local ring_small_pa_num         =   IG.ring_small_pa_num
local ring_small_inner_radius   =   IG.ring_small_inner_radius
local ring_small_pitch          =   IG.ring_small_pitch
local ring_small_thickness      =   IG.ring_small_thickness
local ring_small_number         =   IG.ring_small_number

local ring_blend                =   IG.ring_blend
local ring_outer_radius         =   IG.ring_outer_radius

local cap_pa_num                =   IG.cap_pa_num
local cap_thickness             =   IG.cap_thickness
local cap_blend                 =   IG.cap_blend
local cap_left_gap              =   IG.cap_left_gap
local cap_left_inner_radius     =   IG.cap_left_inner_radius
local cap_right_gap             =   IG.cap_right_gap
local cap_right_inner_radius    =   IG.cap_right_inner_radius
local cap_outer_radius          =   IG.cap_outer_radius

local tube_pa_num               =   IG.tube_pa_num
local tube_inner_radius         =   IG.tube_inner_radius
local tube_thickness            =   IG.tube_thickness
local tube_blend                =   IG.tube_blend
local tube_length               =   IG.tube_length

local pipe_pa_num               =   IG.pipe_pa_num
local pipe_inner_radius         =   IG.pipe_inner_radius
local pipe_thickness            =   IG.pipe_thickness
local pipe_left_gap             =   IG.pipe_left_gap
local pipe_right_gap            =   IG.pipe_right_gap
local pipe_extension            =   IG.pipe_extension

local grid_size                 =   IG.grid_size
)

$(
local cap_left_anchor       =   pipe_thickness + pipe_left_gap
local ring_focus_anchor     =   cap_left_anchor + cap_thickness + cap_left_gap
local ring_big_anchor       =   ring_focus_anchor
for k, ring_focus_pitch in next, ring_focus_pitches, nil do ring_big_anchor = ring_big_anchor + ring_focus_pitch end
local ring_taper_anchor     =   ring_big_anchor + ring_big_pitch * ring_big_number
local ring_small_anchor     =   ring_taper_anchor
for k, ring_taper_pitch in next, ring_taper_pitches, nil do ring_small_anchor = ring_small_anchor + ring_taper_pitch end
local cap_right_anchor      =   ring_small_anchor + ring_small_pitch * ring_small_number + cap_right_gap
local tube_anchor           =   cap_right_anchor + cap_thickness + pipe_right_gap
local total_length          =   tube_anchor + pipe_thickness * 2 + pipe_extension

local grid_axial_num        =   math.ceil( total_length                        / grid_size) + 1
local grid_radial_num       =   math.ceil((pipe_inner_radius + pipe_thickness) / grid_size) + 1
)


;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;
;;;;;;;;;;                             Define potential array                             ;;;;;;;;;;
;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;;

pa_define($(grid_axial_num), $(grid_radial_num), 1, cylindrical, y, electrostatic,, $(grid_size), surface=fractional)

; stacked rings
# for k, ring_focus_inner_radius in next, ring_focus_inner_radii, nil do
# local ring_focus_pitch     = ring_focus_pitches[k]
# local ring_focus_thickness = ring_focus_thicknesses[k]
electrode( $(ring_focus_pa_num + k - 1) ) { locate( $(ring_focus_anchor + ring_focus_pitch / 2), 0 ) { fill {
    within { box( -$(ring_focus_thickness / 2 - ring_blend), $(ring_focus_inner_radius), $(ring_focus_thickness / 2 - ring_blend), $(ring_outer_radius) )}
    within { box( -$(ring_focus_thickness / 2), $(ring_blend + ring_focus_inner_radius), $(ring_focus_thickness / 2), $(ring_outer_radius) )}
    within { circle( -$(ring_focus_thickness / 2 - ring_blend), $(ring_blend + ring_focus_inner_radius), $(ring_blend) )}
    within { circle(  $(ring_focus_thickness / 2 - ring_blend), $(ring_blend + ring_focus_inner_radius), $(ring_blend) )}
}}}
# ring_focus_anchor = ring_focus_anchor + ring_focus_pitch
# end

# for i = 0, ring_big_number - 1 do
electrode( $(ring_big_pa_num + i) ) { locate( $(ring_big_anchor + ring_big_pitch / 2 + ring_big_pitch * i), 0 ) { fill {
    within { box( -$(ring_big_thickness / 2 - ring_blend), $(ring_big_inner_radius), $(ring_big_thickness / 2 - ring_blend), $(ring_outer_radius) )}
    within { box( -$(ring_big_thickness / 2), $(ring_blend + ring_big_inner_radius), $(ring_big_thickness / 2), $(ring_outer_radius) )}
    within { circle( -$(ring_big_thickness / 2 - ring_blend), $(ring_blend + ring_big_inner_radius), $(ring_blend) )}
    within { circle(  $(ring_big_thickness / 2 - ring_blend), $(ring_blend + ring_big_inner_radius), $(ring_blend) )}
}}}
# end

# for k, ring_taper_inner_radius in next, ring_taper_inner_radii, nil do
# local ring_taper_pitch     = ring_taper_pitches[k]
# local ring_taper_thickness = ring_taper_thicknesses[k]
electrode( $(ring_taper_pa_num + k - 1) ) { locate( $(ring_taper_anchor + ring_taper_pitch / 2), 0 ) { fill {
    within { box( -$(ring_taper_thickness / 2 - ring_blend), $(ring_taper_inner_radius), $(ring_taper_thickness / 2 - ring_blend), $(ring_outer_radius) )}
    within { box( -$(ring_taper_thickness / 2), $(ring_blend + ring_taper_inner_radius), $(ring_taper_thickness / 2), $(ring_outer_radius) )}
    within { circle( -$(ring_taper_thickness / 2 - ring_blend), $(ring_blend + ring_taper_inner_radius), $(ring_blend) )}
    within { circle(  $(ring_taper_thickness / 2 - ring_blend), $(ring_blend + ring_taper_inner_radius), $(ring_blend) )}
}}}
# ring_taper_anchor = ring_taper_anchor + ring_taper_pitch
# end

# for i = 0, ring_small_number - 1 do
electrode( $(ring_small_pa_num + i) ) { locate( $(ring_small_anchor + ring_small_pitch / 2 + ring_small_pitch * i), 0 ) { fill {
    within { box( -$(ring_small_thickness / 2 - ring_blend), $(ring_small_inner_radius), $(ring_small_thickness / 2 - ring_blend), $(ring_outer_radius) )}
    within { box( -$(ring_small_thickness / 2), $(ring_blend + ring_small_inner_radius), $(ring_small_thickness / 2), $(ring_outer_radius) )}
    within { circle( -$(ring_small_thickness / 2 - ring_blend), $(ring_blend + ring_small_inner_radius), $(ring_blend) )}
    within { circle(  $(ring_small_thickness / 2 - ring_blend), $(ring_blend + ring_small_inner_radius), $(ring_blend) )}
}}}
# end

; caps
electrode( $(cap_pa_num) ) { locate( $(cap_left_anchor + cap_thickness / 2), 0 ) { fill {
    within { box( -$(cap_thickness / 2 - cap_blend), $(cap_left_inner_radius), $(cap_thickness / 2 - cap_blend), $(cap_outer_radius) )}
    within { box( -$(cap_thickness / 2), $(cap_blend + cap_left_inner_radius), $(cap_thickness / 2), $(cap_outer_radius) )}
    within { circle( -$(cap_thickness / 2 - cap_blend), $(cap_blend + cap_left_inner_radius), $(cap_blend) )}
    within { circle(  $(cap_thickness / 2 - cap_blend), $(cap_blend + cap_left_inner_radius), $(cap_blend) )}
}}}

electrode( $(cap_pa_num + 1) ) { locate( $(cap_right_anchor + cap_thickness / 2), 0 ) { fill {
    within { box( -$(cap_thickness / 2 - cap_blend), $(cap_right_inner_radius), $(cap_thickness / 2 - cap_blend), $(cap_outer_radius) )}
    within { box( -$(cap_thickness / 2), $(cap_blend + cap_right_inner_radius), $(cap_thickness / 2), $(cap_outer_radius) )}
    within { circle( -$(cap_thickness / 2 - cap_blend), $(cap_blend + cap_right_inner_radius), $(cap_blend) )}
    within { circle(  $(cap_thickness / 2 - cap_blend), $(cap_blend + cap_right_inner_radius), $(cap_blend) )}
}}}

; pulsed drift tube
electrode( $(tube_pa_num) ) { locate( $(tube_anchor + pipe_thickness / 2), 0 ) { fill {
    within { box( -$(tube_length / 2 - tube_blend), $(tube_inner_radius), $(tube_length / 2 - tube_blend), $(tube_inner_radius + tube_thickness) )}
    within { circle( -$(tube_length / 2 - tube_blend), $(tube_inner_radius + tube_thickness / 2), $(tube_blend) )}
    within { circle(  $(tube_length / 2 - tube_blend), $(tube_inner_radius + tube_thickness / 2), $(tube_blend) )}
}}}


; vacuum pipe
electrode( $(pipe_pa_num) ) { fill {
    within { box( 0, 0, $(pipe_thickness), $(pipe_inner_radius + pipe_thickness) )}
    within { box( 0, $(pipe_inner_radius), $(total_length), $(pipe_inner_radius + pipe_thickness) )}
    within { box( $(tube_anchor), $(tube_inner_radius + tube_thickness), $(tube_anchor + pipe_thickness), $(pipe_inner_radius + pipe_thickness) )}
    within { box( $(total_length - pipe_thickness), 0, $(total_length), $(pipe_inner_radius + pipe_thickness) )}
}}
